PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = emancypacja
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Routines
  Routine ldt_instr
    TextComponent instr
      letterHeight = .05
      startVal [time (s)] = 0.0
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      text:
        Na ekranie będą pojawiać się ciągi liter.

        Wciśnij F gdy na ekranie pojawi się ciąg niebędący słowem.
        Wciśnij J gdy na ekranie pojawi się ciąg będący słowem.

        Połóż palce wskazujące obu rąk na klawiszach F i J.
        Następnie wciśnij spację, aby rozpocząć.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ldt_task
    TextComponent ldt_string
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $strings
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    KeyboardComponent ldt_key_resp
      allowedKeys = 'f', 'j'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    TextComponent label_left
      letterHeight = 0.05
      pos = (-.53, .45)
      startVal [time (s)] = 0.0
      text = f = nie-słowo
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    TextComponent label_right
      letterHeight = 0.05
      pos = (.59, .45)
      startVal [time (s)] = 0.0
      text = j = słowo
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  Routine ldt_feedback
    CodeComponent feed_code
      Code Type = Py
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      Begin Experiment:
        feed_text = ""
      Begin Routine:
        if ldt_key_resp.corr:
            feedback_text.color = "green"
            feed_text = "dobrze"
        else:
            feedback_text.color = "red"
            feed_text = "źle"
    TextComponent feedback_text
      letterHeight = .05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feed_text
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  Routine demographics
    TextComponent to_finish
      letterHeight = 0.02
      pos = (0, -.4)
      startVal [time (s)] = 0.0
      text = Aby zakończyć, proszę wcisnąć spację
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    FormComponent demo
      Data Format = rows
      Item Padding = 0.05
      Items = demografia2.xlsx
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.02
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine ldt_instr
  LoopInitiator ldt_trials loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('strings', 'emancypacja'), ('category', 'word'), ('correct', 'j')]),
      OrderedDict([('strings', 'egzystencja'), ('category', 'word'), ('correct', 'j')]),
      OrderedDict([('strings', 'prawosławie'), ('category', 'word'), ('correct', 'j')]),
      OrderedDict([('strings', 'restauracja'), ('category', 'word'), ('correct', 'j')]),
      OrderedDict([('strings', 'reumatyczka'), ('category', 'word'), ('correct', 'j')]),
      OrderedDict([('strings', 'wieprzowina'), ('category', 'word'), ('correct', 'j')]),
      OrderedDict([('strings', 'wierzyciele'), ('category', 'word'), ('correct', 'j')]),
      OrderedDict([('strings', 'żandarmeria'), ('category', 'word'), ('correct', 'j')]),
      OrderedDict([('strings', 'eacnmaycjpa'), ('category', 'nword'), ('correct', 'f')]),
      OrderedDict([('strings', 'ejzetscynga'), ('category', 'nword'), ('correct', 'f')]),
      OrderedDict([('strings', 'paiwarwsołe'), ('category', 'nword'), ('correct', 'f')]),
      OrderedDict([('strings', 'ratceujrasa'), ('category', 'nword'), ('correct', 'f')]),
      OrderedDict([('strings', 'rucyzkteama'), ('category', 'nword'), ('correct', 'f')]),
      OrderedDict([('strings', 'wierpozwina '), ('category', 'nword'), ('correct', 'f')]),
      OrderedDict([('strings', 'weirzelycie'), ('category', 'nword'), ('correct', 'f')]),
      OrderedDict([('strings', 'żeiararmdna '), ('category', 'nword'), ('correct', 'f')])]
    Routine ldt_task
    Routine ldt_feedback
  LoopTerminator ldt_trials
  Routine demographics
