PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = macbeth
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Routines
  Routine MFQ1
    FormComponent MFQ_part1
      Data Format = rows
      Item Padding = 0.05
      Items = mfq1.xlsx
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.02
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent mfq1_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_instr
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Aby przejść do kolejnej części badania, naciśnij spację.
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    TextComponent mfq1_instr
      letterHeight = 0.023
      pos = (0, 0.43)
      startVal [time (s)] = 0.0
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      text:
        Ludzie, oceniając w życiu codziennym, czy dane zachowanie jest dobre,
        czy złe, biorą pod uwagę różne kryteria. W jakim stopniu poniższe kryteria
        są ważne dla Pani/Pana przy ocenie danego zachowania jako dobre lub złe?
        Prosimy odpowiedzieć zgodnie z poniższą skalą, zaznaczając przy odpowiedniej liczbie:
    TextComponent scale_instr_mfq1
      letterHeight = 0.025
      pos = (-0.7, 0.26)
      startVal [time (s)] = 0.0
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      text:
        1 Zdecydowanie nieważne
        2 Nieważne
        3 Raczej nieważne
        4 Raczej ważne
        5 Ważne
        6 Zdecydowanie ważne
  Routine MFQ2
    FormComponent MFQ_part2
      Data Format = rows
      Item Padding = 0.05
      Items = mfq2.xlsx
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.02
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent mfq2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_instr_2
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Aby przejść do kolejnej części badania, naciśnij spację.
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    TextComponent scale_instr_mfq1_2
      letterHeight = 0.025
      pos = (-0.7, 0.26)
      startVal [time (s)] = 0.0
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      text:
        1 Zdecydowanie się nie zgadzam
        2 Nie zgadzam się
        3 Raczej się nie zgadzam
        4 Raczej się zgadzam
        5 Zgadzam się
        6 Zdecydowanie się zgadzam
    TextComponent mfq1_instr_2
      letterHeight = 0.023
      pos = (0, 0.43)
      startVal [time (s)] = 0.0
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      text:
        Prosimy o przeczytanie poniższych stwierdzeń i ustosunkowanie się
        do nich zgodnie z poniższą skalą, zaznaczając przy odpowiedniej liczbie:
  Routine fakeiq_scale_instr
    TextComponent instr_fakeiq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        W tej części badania poprosimy Pana/Panią o rozwiązanie kilku zadań mierzących zdolności poznawcze.

        Aby kontynuować, prosimy nacisnąć spację.
    KeyboardComponent instr_fakeiq_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demography
    FormComponent demography_form
      Data Format = rows
      Item Padding = 0.05
      Items = demography.xlsx
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.02
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent demo_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_instr_3
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Aby przejść do kolejnej części badania, naciśnij spację.
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  Routine manipulation
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        manip_txt = ''
      Begin Routine:
        text = """0Teraz poprosimy Panią/Pana o przypomnienie sobie sytuacji, w której odbyła Pani/odbył Pan angażującą rozmowę ze swoją najbliższą osobą.

        Proszę przypomnieć sobie jak czuła/czuł się Pani/Pan w tej sytuacji, jakie odczucia pojawiały się w Pani/Pana ciele. Może Pani/Pan napisać historię tego zdarzenia na kartce, aby łatwiej było się Pani/Panu skupić.

        Nie będziemy zadawać pytań na temat szczegółów historii oraz jej merytoryki. Jest ona wyłącznie Pani/Pana własnością.






        Jeżeli doświadczyła/doświadczył Pani/Pan wyżej opisanej sytuacji, prosimy wcisnąć klawisz 'T'.
        W przeciwnym razie prosimy wcisnąć klawisz 'N'.**1Teraz poprosimy Panią/Pana o przypomnienie sobie sytuacji, w której odbyła Pani/odbył Pan stosunek seksualny, nie będąc wówczas z związku.

        Proszę przypomnieć sobie jak czuła/czuł się Pani/Pan w tej sytuacji, jakie odczucia pojawiały się w Pani/Pana ciele. Może Pani/Pan napisać historię tego zdarzenia na kartce, aby łatwiej było się Pani/Panu skupić.

        Nie będziemy zadawać pytań na temat szczegółów historii oraz jej merytoryki. Jest ona wyłącznie Pani/Pana własnością.






        Jeżeli doświadczyła/doświadczył Pani/Pan wyżej opisanej sytuacji, prosimy wcisnąć klawisz 'T'.
        W przeciwnym razie prosimy wcisnąć klawisz 'N'."""

        texts = text.split('**')

        shuffle(texts)

        manip_txt = texts[0][1:]

        condition = texts[0][0]

        #with open(r'.\instructions\instr_cntrl.txt', 'r', encoding = 'utf-8') as f:
        #    instr_cntrl = f.read()
        #
        #with open(r'.\instructions\instr_exprmntl.txt', 'r', encoding = 'utf-8') as f:
        #    instr_exprmntl = f.read()
        #
        #condition = np.random.choice(['cntrl', 'exprmntl'])
        #
        #if condition == 'cntrl':
        #    manip_txt = instr_cntrl
        #else:
        #    manip_txt = instr_exprmntl
      End Routine:
        thisExp.addData('condition', condition)
    TextComponent manipulation_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $manip_txt
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    KeyboardComponent manipulation_key_resp
      allowedKeys = 't', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent intro_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Dzień dobry,

        Jesteśmy studentami Wydziału Psychologii Uniwersytetu Warszawskiego i przeprowadzamy badanie na temat wpływu jakości relacji z drugą osobą na funkcjonowanie poznawcze. Badanie będzie składać się z dwóch głównych części. W pierwszej części badania będziemy chcieli dowiedzieć się jak najwięcej na temat Pani/Pana bliskiej relacji z drugą osobą. W tym celu poprosimy o udzielenie odpowiedzi na zadane pytania oraz przypomnienie sobie pewnych wydarzeń z Pani/Pana życia. Druga część badania dotyczyć będzie funkcjonowania poznawczego. Poprosimy Panią/Pana o wykonanie kilku zadań, które będą sprawdzały Pani/Pana umiejętności w różnych obszarach poznawczych.

        W badaniu mogą wziąć udział wyłącznie osoby pełnoletnie.

        Prosimy pamiętać, że badanie jest całkowicie anonimowe, a wyniki będą analizowane wyłącznie zbiorczo. Państwa odpowiedzi będą traktowane w sposób zupełnie poufny. Mogą Państwo zrezygnować z uczestnictwa w badaniu w dowolnym momencie. W razie wszelkich pytań zapraszamy do kontaktu pod adresem mailowym: k.zochniak@student.uw.edu.pl

        Maksymilian Koc, Aleksander Molak, Kamila Zochniak
    TextComponent space_instr_intro
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Aby wziąć udział w badaniu, naciśnij spację.
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    KeyboardComponent intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine relationship_scale
    FormComponent relationship_form
      Data Format = rows
      Item Padding = 0.05
      Items = relationship_quest.xlsx
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.02
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent space_instr_4
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Aby przejść do kolejnej części badania, naciśnij spację.
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    KeyboardComponent relationship_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent relationship_instr
      letterHeight = 0.026
      pos = (0, 0.43)
      startVal [time (s)] = 0.0
      text = Prosimy o udzielenie odpowiedzi na poniższe pytania:
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  Routine preMFQ_instr
    TextComponent instr_premfq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        W tej części badania poprosimy Pana/Panią o odpowiedź na pytania dotyczące tego, co uważa Pan/Pani za dobre lub złe.

        Aby kontynuować, prosimy nacisnąć spację.
    KeyboardComponent instr_premfq_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine debriefing
    TextComponent debriefing_text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Dziękujemy za udział w badaniu “Tales of moderate(d) impurity”. Przypominamy, że udział w badaniu był anonimowy, a wyniki będą opracowywane wyłącznie zbiorczo. Państwa odpowiedzi będą traktowane w sposób całkowicie poufny.

        W niniejszym badaniu chcieliśmy sprawdzić, dlaczego niektórzy ludzie postrzegają dane zachowanie jako moralne, podczas gdy inni uważają przeciwnie, oraz czy przekonania te mają związek z przypominaniem sobie różnych produktów. Spodziewamy się, że przypomnienie aktu uważanego przez osobę za niemoralny będzie prowadzić do częstszego przypominania sobie produktów czyszczących.

        W badaniu zostali Państwo losowo przydzieleni do jednego z dwóch warunków eksperymentalnych. Część z Państwa została poproszona o przypomnienie sobie sytuacji zbliżenia seksualnego, podczas gdy część osób badanych nie otrzymała takiej prośby. Dla niektórych osób takie zadanie może być krępujące albo powodować nieprzyjemne bądź kłopotliwe uczucia i myśli. Takie uczucia i myśli mogą utrzymywać się przez jakiś czas po zakończeniu badania. Jest to zupełnie naturalne.

        Część badania, w której wzięli Państwo udział, dotyczyła przypomnienia sobie wyświetlanych podczas czytania artykułu reklam, które przedstawiały różnorodne produkty. Chcieliśmy sprawdzić, czy przypomnienie sobie intymnej sytuacji wiąże się z lepszym zapamiętywaniem określonych reklam.

        Jeżeli mają Państwo jakiekolwiek pytania lub wątpliwości związane z badaniem, prosimy o kontakt pod adresem k.zochniak@student.uw.edu.pl.

        Jesteśmy Państwu bardzo wdzięczni za udział w badaniu. Rozwój nauki możliwy jest dzięki osobom takim jak Państwo!
    KeyboardComponent debriefing_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fakeiq_scale2
    TextComponent space_instr_fake_iq
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Aby przejść do kolejnej części badania, naciśnij na klawiaturze odpowiednią literę widniejącą przy poprawnej odpowiedzi.
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    KeyboardComponent fakeiq2_key_resp
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent FAKE_iq_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Paczka gum do żucia i cukierek kosztują łącznie 1,10 zł. Paczka gum do żucia kosztuje o złotówkę więcej niż cukierek.
        Ile groszy kosztuje cukierek?


        a. 10
        b. 50
        c. 100
        d. 5
  Routine article
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        screenshot_list = [
             'screenshots\\C1_C3_N2_C2_N3_N4.png',
             'screenshots\\C1_C3_N4_C4_N5_N3.png',
             'screenshots\\C1_N1_C5_C2_N4_N3.png',
             'screenshots\\C1_N1_C6_C5_N4_N3.png',
             'screenshots\\C1_N3_C3_N6_N5_C6.png',
             'screenshots\\C1_N4_N3_C5_C6_N6.png',
             'screenshots\\C1_N4_N6_C6_N5_C4.png',
             'screenshots\\C1_N5_N6_C3_N3_C5.png',
             'screenshots\\C2_C6_N2_N3_C4_N4.png',
             'screenshots\\C2_N1_C1_C4_N4_N2.png',
             'screenshots\\C2_N1_C6_C4_N3_N4.png',
             'screenshots\\C2_N2_N6_N5_C5_C4.png',
             'screenshots\\C2_N6_N2_N4_C3_C4.png',
             'screenshots\\C3_N3_C1_C6_N6_N4.png',
             'screenshots\\C3_N3_N6_C5_N2_C6.png',
             'screenshots\\C3_N6_C5_N4_C1_N3.png',
             'screenshots\\C4_C1_N4_N5_C3_N2.png',
             'screenshots\\C4_N4_N5_C6_C3_N1.png',
             'screenshots\\C6_C1_C5_N4_N3_N6.png',
             'screenshots\\C6_C1_N2_N3_N1_C4.png',
             'screenshots\\C6_C2_N3_N5_C3_N4.png',
             'screenshots\\C6_C2_N4_N3_C3_N1.png',
             'screenshots\\C6_C3_N3_C2_N1_N2.png',
             'screenshots\\C6_C3_N6_N3_C1_N5.png',
             'screenshots\\C6_C4_N2_N1_C1_N6.png',
             'screenshots\\C6_C5_N3_N6_N1_C1.png',
             'screenshots\\C6_N2_N3_N5_C5_C2.png',
             'screenshots\\C6_N3_C5_C1_N6_N2.png',
             'screenshots\\C6_N4_C5_N1_C4_N6.png',
             'screenshots\\C6_N6_C5_C1_N2_N1.png',
             'screenshots\\C6_N6_N1_N2_C2_C1.png',
             'screenshots\\N1_C2_N3_N4_C5_C3.png',
             'screenshots\\N1_C5_N5_C3_C2_N2.png',
             'screenshots\\N1_N5_C5_N6_C1_C2.png',
             'screenshots\\N1_N5_C6_C4_N6_C3.png',
             'screenshots\\N2_C3_C6_C2_N6_N5.png',
             'screenshots\\N2_C6_N3_C2_C5_N1.png',
             'screenshots\\N2_N1_C3_N3_C5_C4.png',
             'screenshots\\N3_C4_N2_N5_C5_C2.png',
             'screenshots\\N3_N2_C3_C4_N1_C1.png',
             'screenshots\\N4_C6_C5_N5_C3_N1.png',
             'screenshots\\N4_N5_C1_C6_C4_N6.png',
             'screenshots\\N5_N2_C4_C6_N6_C3.png',
             'screenshots\\N6_C4_C1_C3_N5_N1.png',
             'screenshots\\N6_C4_N2_C1_C5_N4.png',
             'screenshots\\N6_C5_N1_C2_C3_N2.png',
             'screenshots\\N6_C5_N1_C3_C2_N4.png',
             'screenshots\\N6_N1_C4_N2_C6_C1.png',
             'screenshots\\N6_N3_C3_N5_C5_C2.png',
             'screenshots\\N6_N5_C2_N1_C1_C4.png'
        ]

        shuffle(screenshot_list)
      End Routine:
        thisExp.addData('screenshot', screenshot_list[0])
    ImageComponent image
      image [set every repeat] = $screenshot_list[0]
      size = (1.2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DV_measurement_instr
    TextComponent DV_measurement_instr_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Na kolejnych ekranach zostaną Państwo poproszeni o wskazanie, które reklamy widzieli Państwo w trakcie badania.

        Jeśli uważają Państwo, że dana reklama pojawiła się na ekranie w trakcie badania, proszę wcisnąć 'T'.

        Jeżeli uważają Państwo, że dana reklama nie pojawiła się na ekranie w trakcie badania, proszę wcisnąć 'N'.

        Aby przejść do nastepnego ekranu, prosze wcisnąć spację.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine article_instr
    TextComponent article_instr_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Na następnym ekranie zobaczą Państwo artykuł prasowy.

        Proszę policzyć ile zdań w tym artykule ma liczbę słów, która jest liczbą pierwszą.

        Liczba pierwsza, to taka liczba, która dzieli się przez siebie samą i przez 1.

        W tym zadaniu ważny jest czas - proszę starać się wykonać je najszybciej jak Pan(i) potrafi.

        Po zakończeniu zadania proszę wcisnąć spację.

        Jeśli jest Pan(i) gotowa, żeby rozpocząć zadanie, prosze nacisnąć spację.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DV_measurement
    ImageComponent ad_images
      image [set every repeat] = $ImageFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent DV_measurement_key_resp
      allowedKeys = 't', 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fakeiq_scale3
    TextComponent space_instr_fake_iq_2
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Aby przejść do kolejnej części badania, naciśnij na klawiaturze odpowiednią literę widniejącą przy poprawnej odpowiedzi.
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    KeyboardComponent fakeiq2_key_resp_2
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent FAKE_iq_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Jeśli 5 maszynom stworzenie 5 produktów zajmuje 5 minut, to ile minut zajęłoby stworzenie 100 produktów przez 100 maszyn?



        a. 100
        b. 5
        c. 10
        d. 50
  Routine article_ans
    KeyboardComponent article_ans_resp
      allowedKeys = 'a','b','c','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent article_ans_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Proszę wskazać ile zdań w artykule zawierało liczbę słów, która jest liczbą pierwszą, wciskając na klawiaturze literę, która widnieje przy prawidłowej odpowiedzi.



        a. 12
        b. 3
        c. 7
        d. 15
Flow
  Routine manipulation
  Routine fakeiq_scale_instr
  Routine fakeiq_scale2
  Routine fakeiq_scale3
  Routine article_instr
  Routine article
  Routine article_ans
  Routine DV_measurement_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ads_paths.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'images/cleansing/cleansing_1.jpg')]),
      OrderedDict([('ImageFile', 'images/cleansing/cleansing_2.jpg')]),
      OrderedDict([('ImageFile', 'images/cleansing/cleansing_3.jpg')]),
      OrderedDict([('ImageFile', 'images/cleansing/cleansing_4.jpg')]),
      OrderedDict([('ImageFile', 'images/cleansing/cleansing_5.jpg')]),
      OrderedDict([('ImageFile', 'images/cleansing/cleansing_6.jpg')]),
      OrderedDict([('ImageFile', 'images/non-cleansing/non_cleansing_1.jpg')]),
      OrderedDict([('ImageFile', 'images/non-cleansing/non_cleansing_2.jpg')]),
      OrderedDict([('ImageFile', 'images/non-cleansing/non_cleansing_3.jpg')]),
      OrderedDict([('ImageFile', 'images/non-cleansing/non_cleansing_4.jpg')]),
      OrderedDict([('ImageFile', 'images/non-cleansing/non_cleansing_5.jpg')]),
      OrderedDict([('ImageFile', 'images/non-cleansing/non_cleansing_6.jpg')])]
    Routine DV_measurement
  LoopTerminator trials
  Routine debriefing
