PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = macbeth
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Routines
  Routine MFQ1
    FormComponent MFQ_part1
      Data Format = rows
      Item Padding = 0.05
      Items = mfq1.xlsx
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.02
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent mfq1_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_instr
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Aby przejść do kolejnej części badania, naciśnij spację.
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    TextComponent mfq1_instr
      letterHeight = 0.023
      pos = (0, 0.43)
      startVal [time (s)] = 0.0
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      text:
        Ludzie, oceniając w życiu codziennym, czy dane zachowanie jest dobre,
        czy złe, biorą pod uwagę różne kryteria. W jakim stopniu poniższe kryteria
        są ważne dla Pani/Pana przy ocenie danego zachowania jako dobre lub złe?
        Prosimy odpowiedzieć zgodnie z poniższą skalą, zaznaczając przy odpowiedniej liczbie:
    TextComponent scale_instr_mfq1
      letterHeight = 0.025
      pos = (-0.7, 0.26)
      startVal [time (s)] = 0.0
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      text:
        1 Zdecydowanie nieważne
        2 Nieważne
        3 Raczej nieważne
        4 Raczej ważne
        5 Ważne
        6 Zdecydowanie ważne
  Routine MFQ2
    FormComponent MFQ_part2
      Data Format = rows
      Item Padding = 0.05
      Items = mfq2.xlsx
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.02
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent mfq2_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_instr_2
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Aby przejść do kolejnej części badania, naciśnij spację.
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    TextComponent scale_instr_mfq1_2
      letterHeight = 0.025
      pos = (-0.7, 0.26)
      startVal [time (s)] = 0.0
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      text:
        1 Zdecydowanie się nie zgadzam
        2 Nie zgadzam się
        3 Raczej się nie zgadzam
        4 Raczej się zgadzam
        5 Zgadzam się
        6 Zdecydowanie się zgadzam
    TextComponent mfq1_instr_2
      letterHeight = 0.023
      pos = (0, 0.43)
      startVal [time (s)] = 0.0
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      text:
        Prosimy o przeczytanie poniższych stwierdzeń i ustosunkowanie się
        do nich zgodnie z poniższą skalą, zaznaczając przy odpowiedniej liczbie:
  Routine fakeiq_scale
    ImageComponent image_raven
      image [set every repeat] = $ImageFile
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = '1', '2', '3', '4', '5', '6', '7', '8'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine fakeiq_scale_instr
    TextComponent instr_fakeiq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        W tej części badania poprosimy Pana/Panią o rozwiązanie kilku zadań mierzących zdolności poznawcze. Po zdecydowaniu
        się na którąś z odpowiedzi, prosimy nacisnąć odpowiedni numer na klawiaturze.

        Aby kontynuować, prosimy nacisnąć spację.
    KeyboardComponent instr_fakeiq_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demography
    FormComponent demography_form
      Data Format = rows
      Item Padding = 0.05
      Items = demography.xlsx
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.02
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent demo_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_instr_3
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Aby przejść do kolejnej części badania, naciśnij spację.
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  Routine manipulation
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        manip_txt = ''
      Begin Routine:
        with open(r'.\instructions\instr_cntrl.txt', 'r', encoding = 'utf-8') as f:
            instr_cntrl = f.read()

        with open(r'.\instructions\instr_exprmntl.txt', 'r', encoding = 'utf-8') as f:
            instr_exprmntl = f.read()

        condition = np.random.choice(['cntrl', 'exprmntl'])

        if condition == 'cntrl':
            manip_txt = instr_cntrl
        else:
            manip_txt = instr_exprmntl
      End Routine:
        thisExp.addData('condition', condition)
    TextComponent manipulation_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $manip_txt
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent intro_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Dzień dobry,

        Jesteśmy studentami Wydziału Psychologii Uniwersytetu Warszawskiego i przeprowadzamy badanie na temat wpływu jakości relacji z drugą osobą na funkcjonowanie poznawcze. Badanie będzie składać się z dwóch głównych części. W pierwszej części badania będziemy chcieli dowiedzieć się jak najwięcej na temat Pani/Pana bliskiej relacji z drugą osobą. W tym celu poprosimy o udzielenie odpowiedzi na zadane pytania oraz przypomnienie sobie pewnych wydarzeń z Pani/Pana życia. Druga część badania dotyczyć będzie funkcjonowania poznawczego. Poprosimy Panią/Pana o wykonanie kilku zadań, które będą sprawdzały Pani/Pana umiejętności w różnych obszarach poznawczych.

        W badaniu mogą wziąć udział wyłącznie osoby pełnoletnie.

        Prosimy pamiętać, że badanie jest całkowicie anonimowe, a wyniki będą analizowane wyłącznie zbiorczo. Państwa odpowiedzi będą traktowane w sposób zupełnie poufny. Mogą Państwo zrezygnować z uczestnictwa w badaniu w dowolnym momencie. W razie wszelkich pytań zapraszamy do kontaktu pod adresem mailowym: k.zochniak@student.uw.edu.pl

        Maksymilian Koc, Aleksander Molak, Kamila Zochniak
    TextComponent space_instr_intro
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Aby wziąć udział w badaniu, naciśnij spację.
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    KeyboardComponent intro_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine relationship_scale
    FormComponent relationship_form
      Data Format = rows
      Item Padding = 0.05
      Items = relationship_quest.xlsx
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.02
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent space_instr_4
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Aby przejść do kolejnej części badania, naciśnij spację.
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    KeyboardComponent relationship_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent relationship_instr
      letterHeight = 0.026
      pos = (0, 0.43)
      startVal [time (s)] = 0.0
      text = Prosimy o udzielenie odpowiedzi na poniższe pytania:
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  Routine preMFQ_instr
    TextComponent instr_premfq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        W tej części badania poprosimy Pana/Panią o odpowiedź na pytania dotyczące tego, co uważa Pan/Pani za dobre lub złe.

        Aby kontynuować, prosimy nacisnąć spację.
    KeyboardComponent instr_premfq_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine debriefing
    TextComponent debriefing_text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Dziękujemy za udział w badaniu “Tales of moderate(d) impurity”. Przypominamy, że udział w badaniu był anonimowy, a wyniki będą opracowywane wyłącznie zbiorczo.

        W niniejszym badaniu chcieliśmy sprawdzić, dlaczego niektórzy ludzie postrzegają dane zachowanie jako moralne, podczas gdy inni uważają przeciwnie, oraz czy przekonania te mają związek z wyborem różnych produktów. Spodziewamy się, że przypomnienie aktu uważanego przez osobę za niemoralny będzie prowadzić do częstszego wyboru produktów czyszczących.

        W badaniu zostali Państwo losowo przydzieleni do jednego z dwóch warunków eksperymentalnych. Część z Państwa została poproszona o przypomnienie sobie intymnej sytuacji, podczas gdy część z osób badanych nie otrzymała takiej prośby. Dla niektórych osób taka prośba może być krępująca albo powodować nieprzyjemne bądź kłopotliwe uczucia lub myśli. Takie uczucia lub myśli mogą utrzymywać się przez jakiś czas po zakończeniu badania. Jest to zupełnie naturalne.

        Druga część badania, w której wzięli Państwo udział, dotyczyła wyboru produktów. Chcielibyśmy podkreślić, że nie było wśród nich wyborów poprawnych lub niepoprawnych. Zadanie służyło wyłącznie poznaniu preferencji uczestników badania dotyczących danych produktów.

        W dalszym ciągu mogą Państwo zrezygnować z udziału w badaniu. Aby to zrobić, należy zamknąć kartę przeglądarki, nie przechodząc na kolejny ekran. Jeżeli mają Państwo jakiekolwiek pytania lub wątpliwości związane z badaniem, prosimy o kontakt pod adresem ……………….

        Jesteśmy Państwu bardzo wdzięczni za udział w badaniu. Rozwój nauki możliwy jest dzięki osobom takim jak Państwo!

        Aby zakończyć badanie, prosimy nacisnąć spację.
    KeyboardComponent debriefing_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine relationship_scale
  Routine fakeiq_scale_instr
  LoopInitiator fakeiq_trials loopType="TrialHandler"
    conditionsFile = fakeiq_images.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'raven/raven1.png')]),
      OrderedDict([('ImageFile', 'raven/raven2.png')]),
      OrderedDict([('ImageFile', 'raven/raven3.png')])]
    Routine fakeiq_scale
  LoopTerminator fakeiq_trials
  Routine preMFQ_instr
  Routine MFQ1
  Routine MFQ2
  Routine manipulation
  Routine demography
  Routine debriefing
