PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = link_test
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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    TextComponent link
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = After clicking space you'll be redirected
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine browser
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        import random
        import webbrowser

        def build_query(params, url):

            parametrized_url = url

            len_ = len(params)

            for i, param in enumerate(params):
                addon = ''
                if i + 1 < len_:
                    addon = '+'
                parametrized_url += param + addon

            return parametrized_url

        clean = random.sample(['cx' + str(x) for x in range(25)], 3)
        neutr = random.sample(['nx' + str(x) for x in range(25)], 3)
        all_ads = clean + neutr
        random.shuffle(all_ads)

        url = 'HERE_GOES_OUR_URL\?q='

        final_url = build_query(all_ads, url)


        #webbrowser.open(final_url)
        #
    TextComponent text
      letterHeight = 0.01
      startVal [time (s)] = 0.0
      text = $final_url
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you!
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine end
